PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = labsolo
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = You will see some faces try your best to remember them.
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  Routine phase_1
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $study
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
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  Routine filler
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $sum
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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  Routine phase_2
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $test
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 10
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study': 'C:\\Program Files\\PsychoPy\\soloproject\\1n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\2n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\3n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\4n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\5n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\6n.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a1.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a2.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a3.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a4.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a5.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\a6.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h1.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h2.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h3.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h4.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h5.png'},
      {'study': 'C:\\Program Files\\PsychoPy\\soloproject\\h6.png'}]
    Routine phase_1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Program Files/PsychoPy/soloproject/math.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sum': '125-19'},
      {'sum': '637+94'},
      {'sum': '113-49'},
      {'sum': '586+76'},
      {'sum': '522+16'},
      {'sum': '273-87'}]
    Routine filler
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ret_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'C:\\Program Files\\PsychoPy\\soloproject\\10.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\11.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\12.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\13.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\14.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\15.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\16.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\17.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\18.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\19.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\20.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\21.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\22.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\23.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\24.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\25.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\26.png'},
      {'test': 'C:\\Program Files\\PsychoPy\\soloproject\\27.png'}]
    Routine phase_2
  LoopTerminator trials_3
